PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent selection
      image = C:/Users/lange/Downloads/FeelingsCircleBig2.gimp.png
      size = (0.5, 0.5)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 8.0
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    TextComponent text
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 10.5
      stopVal [duration (s)] = 8.0
      text = Wie finden Sie das Tattoo?
      units = norm
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = C:/Users/lange/Desktop/Tracks/myTattoo_Trim.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine trial
